OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
0x790d75b8 = Jussi T. Lindgren
0x8c1fc55b = 1.0
0x9f5c4075 = Classification training example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  4 channel noise x from Uniform Random (0,1)
  generator is amplified to range (x+1)*10.
Comment
  Applying 4x4 matrix multiplication three times by Spatial
  Filter is used to generate data for 3 classes. For each
  class i, dimension i is the most prominent. Others are
  damped, except dimension 4, which is considered pure noise.

  Signal average boxes turn each chunk of signal into one
  example to classify. It increases the stability of the features.

  The role of the classifier training is to discover the
  decision rule that can tell the 3 streams apart. Note
  that if the coefficients 0.95 in the spatial filters are set to 0,
  a good classification rule is really simple: class = i iff x(i)>0
  (and ignore dimension 4). However, with 0.95, a perfect
  classification is not possible as there is overlap in the classes.

  You can change the matrixes and explore how it affects
  the obtained cross-validation accuracies while changing
  the classifiers and the multiclass strategies.
Comment
  Signal Display can be used to view the data.
  Note that the data the classifier gets has 4
  dimensions, whereas for display purposes the
  signals are catenated in a way that channels 0-3 are
  the data for the first stream, 4-7 for the second one
  and so on.
Comment
  Timeout box controls how much training data is used.

  After training, the Classifier trainer saves the classifier
  in a file which could then in principle be loaded by a
  classifier processor box to classify future data.

  Finally, the scenario stops after the classifier has been saved.

GDF file reader => #0
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A01E.gdf
  Samples per buffer = 32
GDF file reader => #1
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A01T.gdf
  Samples per buffer = 32
GDF file reader => #2
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A02E.gdf
  Samples per buffer = 32
GDF file reader => #3
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A02T.gdf
  Samples per buffer = 32
GDF file reader => #4
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A03E.gdf
  Samples per buffer = 32
GDF file reader => #5
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A03T.gdf
  Samples per buffer = 32
GDF file reader => #6
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A07E.gdf
  Samples per buffer = 32
GDF file reader => #7
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A07T.gdf
  Samples per buffer = 32
GDF file reader => #8
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A08E.gdf
  Samples per buffer = 32
GDF file reader => #9
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A04E.gdf
  Samples per buffer = 32
GDF file reader => #10
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A04T.gdf
  Samples per buffer = 32
GDF file reader => #11
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A05E.gdf
  Samples per buffer = 32
GDF file reader => #12
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A08T.gdf
  Samples per buffer = 32
GDF file reader => #13
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A08T.gdf
  Samples per buffer = 32
GDF file reader => #14
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A08T.gdf
  Samples per buffer = 32
GDF file reader => #15
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A05T.gdf
  Samples per buffer = 32
GDF file reader => #16
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A06E.gdf
  Samples per buffer = 32
GDF file reader => #17
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A06T.gdf
  Samples per buffer = 32
GDF file reader => #18
  Filename = /Users/vidurshah/Documents/School/bci-proj/BCICIV_2a_gdf/A09T.gdf
  Samples per buffer = 32
Input 1=#0.EEG stream, Input 2=#1.EEG stream, Input 3=#2.EEG stream, Input 4=#3.EEG stream, Input 5=#4.EEG stream, Input 6=#5.EEG stream, Input 7=#9.EEG stream, Input 8=#10.EEG stream, Input 9=#11.EEG stream, Input 10=#15.EEG stream, Input 11=#16.EEG stream, Input 12=#17.EEG stream, Input 13=#7.EEG stream, Input 14=#8.EEG stream, Input 15=#6.EEG stream, Input 16=#12.EEG stream, Input 17=#13.EEG stream, Input 18=#14.EEG stream, Input 19=#18.EEG stream -> 0xc73e83ec Signal Merger
-> Simple DSP => #20
  Equation = (x+1)*10
-> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0; 0;0.95;0;0; 0;0;0.95;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
-> Signal average => #22
-> Feature aggregator => #23
#20 -> Spatial Filter
  Spatial Filter Coefficients = 0.95;0;0;0; 0;1;0;0; 0;0;0.95;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
-> Signal average => #25
-> Feature aggregator => #26
#20 -> Spatial Filter
  Spatial Filter Coefficients = 0.95;0;0;0; 0;0.95;0;0; 0;0;1;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
-> Signal average => #28
-> Feature aggregator => #29
Input 1=#22, Input 2=#25, Input 3=#28 -> 0xc73e83ec Signal Merger => #30
Data=#30 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 1
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stimulations 1=#0.Stimulations, Input stimulations 2=#1.Stimulations, Input stimulations 3=#2.Stimulations, Input stimulations 4=#3.Stimulations, Input stimulations 5=#4.Stimulations, Input stimulations 6=#5.Stimulations, Input stimulations 7=#9.Stimulations, Input stimulations 8=#10.Stimulations, Input stimulations 9=#11.Stimulations, Input stimulations 10=#15.Stimulations, Input stimulations 11=#16.Stimulations, Input stimulations 12=#17.Stimulations, Input stimulations 13=#6.Stimulations, Input stimulations 14=#7.Stimulations, Input stimulations 15=#8.Stimulations, Input stimulations 16=#12.Stimulations, Input stimulations 17=#13.Stimulations, Input stimulations 18=#14.Stimulations, Input stimulations 19=#18.Stimulations -> Stimulation multiplexer => #32
Stimulations=#32, Features for class 1=#23, Features for class 2=#26, Features for class 3=#29 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = /Users/vidurshah/Documents/School/bci-proj/test_data/classification-training-bci.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Class 3 label = OVTK_StimulationId_Label_03
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Number of partitions for k-fold cross-validation test = 10
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1
  Shrinkage: Force diagonal cov (DDA) = false
  Balance classes = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

Timeout
  Timeout delay = 20
  Output Stimulation = OVTK_StimulationId_Train
