OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Settings
  Test Name = SVM-OneVsOne-PKPD

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-ssvep-training.ov
Input stream 1=#0.Output stream 3, Input stream 2=#0.Output stream 2 -> Identity => #1
#1.Output stream 1 -> Identity
-> Identity => #3
#1.Output stream 1 -> Target Separator => #4
  Lua Script = ${Player_ScenarioDirectory}/scripts/target-separator.lua
  Targets = 0 1 2 3
  Non Targets = 4
  Output Stimulation = OVTK_StimulationId_Target
#1.Output stream 2 -> Temporal Filter => #5
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
  0x8d21ff41 = ${Player_ScenarioDirectory}/scripts/temporal-filter-freq-1.cfg
Input signal=#5, Input stimulations=#4.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Time based epoching "TBE"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/scripts/time-based-epoching.cfg
-> Signal Power Log => #8
#1.Output stream 2 -> Temporal Filter => #9
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
  0x8d21ff41 = ${Player_ScenarioDirectory}/scripts/temporal-filter-freq-2.cfg
Input signal=#9, Input stimulations=#4.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Time based epoching "TBE"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/scripts/time-based-epoching.cfg
-> Signal Power Log => #12
#1.Output stream 2 -> Temporal Filter => #13
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
  0x8d21ff41 = ${Player_ScenarioDirectory}/scripts/temporal-filter-freq-3.cfg
Input signal=#13, Input stimulations=#4.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Time based epoching "TBE"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/scripts/time-based-epoching.cfg
-> Signal Power Log => #16
Input stream 1=#8, Input stream 2=#12, Input stream 3=#16 -> Feature aggregator => #17
Triggers=#3, Matrix=#17 -> Stream Switch => #18
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_00
  Switch stim for output 2 = OVTK_StimulationId_Label_01
  Switch stim for output 3 = OVTK_StimulationId_Label_02
  Switch stim for output 4 = OVTK_StimulationId_Label_03
Stimulations=#3, Features for class 1=#18.Output(1), Features for class 2=#18.New output, Features for class 3=#18.New output(1) -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/$var{Test Name}-output.xml
  Multiclass strategy to apply = OneVsOne
  Pairwise Decision Strategy = PKPD
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Class 3 label = OVTK_StimulationId_Label_03
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.1
  Weight =
  SVM type = C-SVC
  Degree = 1
  Kernel type = Linear
  Weight Label =
  Epsilon tolerance = 0.0010
  Cost = 1
  Cache size = 100
  Gamma = 0
  Nu = 0.5
  Shrinking = true
  Coef 0 = 0
  Number of partitions for k-fold cross-validation test = 3
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
